CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".jpeg")
    Name to assign these images:original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:original
    Name the output image:Resize
    Resizing method:Resize by specifying desired final dimensions
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    Width (x) of the final image:2453
    Height (y) of the final image:1905
    # of planes (z) in the final image:1
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

Crop:[module_num:6|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notes:['Crop the image so that only the yeast patches are visible. It is especially important to remove the edges of the plate from the image. Otherwise, these edges will interfere with the segmentation of the yeast patches. The positions of the crop were chosen with the help of FIJI and the rectangle tool.']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
    Select the input image:Resize
    Name the output image:CropOriginal
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,2453
    Top and bottom rectangle positions:150,1860
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:7|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
    Select the input image:CropOriginal
    Conversion method:Combine
    Image type:RGB
    Name the output image:CropGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:CropGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DefineGrid:[module_num:9|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notes:['The pipeline up to this point has identified yeast patches that are whole and not speckled. We do not want to leave speckled patches out of the analysis, so we will take advantage of the geometry of the plate. The patches were arrayed in a grid and the DefineGrid module will take advantage of this fact. It requires whole patches in 3 of the 4 corners to work, so the experimental design and platemap should become aligned with the image analysis.']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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Once
    Select the method to define the grid:Manual
    Select the previously identified objects:FilterObjects
    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:105,100
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:2350,1600
    Row number of the second cell:8
    Column number of the second cell:12
    Retain an image of the grid?:No
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    Select the image on which to display the grid:ImageAfterMath
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:10|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
    Select the defined grid:Grid
    Name the objects to be identified:Well
    Select object shapes and locations:Circle Forced Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:140
    Select the guiding objects:Prespots

SaveCroppedObjects:[module_num:11|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
    Do you want to save cropped images or object masks?:Images
    Objects:Well
    Directory:Default Input Folder sub-folder|Desktop\\ELISPOT
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:original
    Save output crops in nested folders?:Yes
    Saved file format:png
    Image to crop:ImageAfterMath
