CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Grey
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Grey
    Name the primary objects to be identified:Well
    Typical diameter of objects, in pixel units (Min,Max):100,150
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Threshold:[module_num:6|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
    Select the input image:Grey
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:70
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Threshold
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):2,80
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
RelateObjects:[module_num:8|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
    Parent objects:Well
    Child objects:Spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SpotInWell
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Grey
    Select objects to measure:SpotInWell, Spots, Well

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:SpotInWell, Spots, Well
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:11|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
    Measure the area occupied by:Objects
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    Select object sets to measure:SpotInWell, Spots, Well

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:SpotInWell
    Name the output image:SpotinWellimg
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:SpotinWellimg
    Select method for constructing file names:From image filename
    Select image name for file prefix:Grey
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:spotinwell
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Well
    Name the output image:Wellimg
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Wellimg
    Select method for constructing file names:From image filename
    Select image name for file prefix:Grey
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:well
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop\\ELISPOT
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Spots|Location_Center_Z,Spots|Location_Center_X,Spots|Location_Center_Y,Spots|Number_Object_Number,Spots|Parent_Well,Spots|Children_SpotInWell_Count,SpotInWell|AreaShape_MedianRadius,SpotInWell|AreaShape_Eccentricity,SpotInWell|AreaShape_Area,SpotInWell|AreaShape_MajorAxisLength,SpotInWell|AreaShape_Center_X,SpotInWell|AreaShape_Center_Y,SpotInWell|AreaShape_FormFactor,SpotInWell|AreaShape_MinFeretDiameter,SpotInWell|AreaShape_EulerNumber,SpotInWell|AreaShape_Solidity,SpotInWell|AreaShape_BoundingBoxMinimum_Y,SpotInWell|AreaShape_BoundingBoxMinimum_X,SpotInWell|AreaShape_Perimeter,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:image1-189_
    Overwrite existing files without warning?:No
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